def model CardiovascularSystem as
  def unit s2 as
    unit second {expo: 2};
  enddef;
  def unit Hz as
    unit second {expo: -1};
  enddef;
  def unit millis as
    unit second {pref: milli};
  enddef;
  def unit per_millis as
    unit millis {expo: -1};
  enddef;
  def unit mm as
    unit metre {pref: milli};
  enddef;
  def unit m2 as
    unit metre {expo: 2};
  enddef;
  def unit mm2 as
    unit metre {expo: 2, pref: milli};
  enddef;
  def unit m3 as
    unit metre {expo: 3};
  enddef;
  def unit m4 as
    unit metre {expo: 4};
  enddef;
  def unit mm3 as
    unit metre {expo: 3, pref: milli};
  enddef;
  def unit J_per_s as
    unit joule;
    unit second {expo: -1};
  enddef;
  def unit mol_per_s as
    unit mole;
    unit second {expo: -1};
  enddef;
  def unit mmol_per_s as
    unit mole {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit umol_per_s as
    unit mole {pref: micro};
    unit second {expo: -1};
  enddef;
  def unit C_per_s as
    unit coulomb;
    unit second {expo: -1};
  enddef;
  def unit mC_per_s as
    unit coulomb {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit uC_per_s as
    unit coulomb {pref: micro};
    unit second {expo: -1};
  enddef;
  def unit nC_per_s as
    unit coulomb {pref: nano};
    unit second {expo: -1};
  enddef;
  def unit Cm_per_millis as
    unit coulomb;
    unit metre;
    unit second {expo: -1, pref: milli};
  enddef;
  def unit m_per_s as
    unit metre;
    unit second {expo: -1};
  enddef;
  def unit mm_per_s as
    unit metre {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit um_per_s as
    unit metre {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit rad_per_s as
    unit radian;
    unit second {expo: -1};
  enddef;
  def unit m3_per_s as
    unit metre {expo: 3};
    unit second {expo: -1};
  enddef;
  def unit mL as
    unit litre {pref: milli};
  enddef;
  def unit per_milliL_s as
    unit litre {expo: -1, pref: milli};
    unit second {expo: -1};
  enddef;
  def unit s_per_m3 as
    unit second;
    unit metre {expo: -3};
  enddef;
  def unit s_per_milliV as
    unit second;
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit s_per_millis as
    unit second;
    unit second {expo: -1, pref: milli};
  enddef;
  def unit millis_per_s as
    unit second {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit mm3_per_s as
    unit metre {expo: 3, pref: milli};
    unit second {expo: -1};
  enddef;
  def unit l_per_s as
    unit litre;
    unit second {expo: -1};
  enddef;
  def unit per_ml_s as
    unit litre {expo: -1, pref: milli};
    unit second {expo: -1};
  enddef;
  def unit J_per_mol as
    unit joule;
    unit mole {expo: -1};
  enddef;
  def unit J_per_kmol_K as
    unit joule;
    unit mole {expo: -1, pref: kilo};
    unit kelvin {expo: -1};
  enddef;
  def unit J_per_M as
    unit J_per_mol;
  enddef;
  def unit J_per_C as
    unit joule;
    unit coulomb {expo: -1};
  enddef;
  def unit J_per_C_s as
    unit joule;
    unit coulomb {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit J_per_m as
    unit joule;
    unit metre {expo: -1};
  enddef;
  def unit J_per_m3 as
    unit joule;
    unit metre {expo: -3};
  enddef;
  def unit mmHg as
    unit pascal {mult: 133.32};
  enddef;
  def unit m3_per_J as
    unit joule {expo: -1};
    unit metre {expo: 3};
  enddef;
  def unit J_per_m3s as
    unit joule;
    unit metre {expo: -3};
    unit second {expo: -1};
  enddef;
  def unit m3_per_Js as
    unit joule {expo: -1};
    unit metre {expo: 3};
    unit second {expo: -1};
  enddef;
  def unit J2_per_m6 as
    unit joule {expo: 2};
    unit metre {expo: -6};
  enddef;
  def unit Js2_per_C2 as
    unit second {expo: 2};
    unit joule;
    unit coulomb {expo: -2};
  enddef;
  def unit Js2_per_mol2 as
    unit joule;
    unit second {expo: 2};
    unit mole {expo: -2};
  enddef;
  def unit Js_per_mol2 as
    unit joule;
    unit second;
    unit mole {expo: -2};
  enddef;
  def unit Js_per_C2 as
    unit joule;
    unit second;
    unit coulomb {expo: -2};
  enddef;
  def unit J_per_mol2 as
    unit joule;
    unit mole {expo: -2};
  enddef;
  def unit C2_per_J_s as
    unit coulomb {expo: 2};
    unit joule {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit J_per_C2 as
    unit joule;
    unit coulomb {expo: -2};
  enddef;
  def unit C2_per_J as
    unit joule;
    unit coulomb {expo: -2};
  enddef;
  def unit mol_per_m3 as
    unit mole;
    unit metre {expo: -3};
  enddef;
  def unit M as
    unit mole;
    unit litre {expo: -1};
  enddef;
  def unit mM as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit uM as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit kg_per_m3 as
    unit kilogram;
    unit metre {expo: -3};
  enddef;
  def unit m3_per_kg as
    unit kilogram {expo: -1};
    unit metre {expo: 3};
  enddef;
  def unit per_m3 as
    unit metre {expo: -3};
  enddef;
  def unit mol_per_m2_s as
    unit mole;
    unit metre {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit mM_m_per_s as
    unit mM;
    unit metre;
    unit second {expo: -1};
  enddef;
  def unit J_per_m2_s as
    unit joule;
    unit metre {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit Js_per_m4 as
    unit joule;
    unit second;
    unit metre {expo: -4};
  enddef;
  def unit mM_per_s as
    unit mM;
    unit second {expo: -1};
  enddef;
  def unit per_s as
    unit second {expo: -1};
  enddef;
  def unit per_mM_s as
    unit mM {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit m6_per_mol2_s as
    unit metre {expo: 6};
    unit mole {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit m3_per_mol as
    unit metre {expo: 3};
    unit mole {expo: -1};
  enddef;
  def unit mol_per_m3_s as
    unit mole;
    unit metre {expo: -3};
    unit second {expo: -1};
  enddef;
  def unit per_mol as
    unit mole {expo: -1};
  enddef;
  def unit J_per_mol_K as
    unit joule;
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit m2_per_s as
    unit metre {expo: 2};
    unit second {expo: -1};
  enddef;
  def unit per_C as
    unit coulomb {expo: -1};
  enddef;
  def unit per_m as
    unit metre {expo: -1};
  enddef;
  def unit per_mM as
    unit mM {expo: -1};
  enddef;
  def unit Js2_per_m2 as
    unit joule;
    unit second {expo: 2};
    unit metre {expo: -2};
  enddef;
  def unit Js_per_m2 as
    unit joule;
    unit second;
    unit metre {expo: -2};
  enddef;
  def unit J_per_m2 as
    unit joule;
    unit metre {expo: -2};
  enddef;
  def unit m_per_s2 as
    unit metre;
    unit second {expo: -2};
  enddef;
  def unit rad_per_s2 as
    unit radian;
    unit second {expo: -2};
  enddef;
  def unit Js_per_m3 as
    unit joule;
    unit second;
    unit metre {expo: -3};
  enddef;
  def unit Js2_per_m5 as
    unit joule;
    unit second {expo: 2};
    unit metre {expo: -5};
  enddef;
  def unit m5_per_Js2 as
    unit joule {expo: -1};
    unit second {expo: -2};
    unit metre {expo: 5};
  enddef;
  def unit J_per_m6 as
    unit joule;
    unit metre {expo: -6};
  enddef;
  def unit m6_per_J as
    unit metre {expo: 6};
    unit joule {expo: -1};
  enddef;
  def unit m6_per_Js as
    unit metre {expo: 6};
    unit joule {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit mm6_per_J as
    unit metre {expo: 6, pref: milli};
    unit joule {expo: -1};
  enddef;
  def unit Js2_per_m9 as
    unit joule;
    unit second {expo: 2};
    unit metre {expo: -9};
  enddef;
  def unit m6s_per_J as
    unit second;
    unit metre {expo: 6};
    unit joule {expo: -1};
  enddef;
  def unit Js_per_m6 as
    unit joule;
    unit second;
    unit metre {expo: -6};
  enddef;
  def unit Js2_per_m6 as
    unit joule;
    unit second {expo: 2};
    unit metre {expo: -6};
  enddef;
  def unit m3_per_s2 as
    unit metre {expo: 3};
    unit second {expo: -2};
  enddef;
  def unit mm3_per_s2 as
    unit metre {expo: 3, pref: milli};
    unit second {expo: -2};
  enddef;
  def unit per_mm3 as
    unit metre {expo: -3, pref: milli};
  enddef;
  def unit UnitValve as
    unit metre {expo: 3};
    unit second {expo: -1};
    unit J_per_m3 {expo: -0.5};
  enddef;
  def unit J_per_m9 as
    unit joule;
    unit metre {expo: -9};
  enddef;
  def unit milliV as
    unit volt {pref: milli};
  enddef;
  def unit per_milliV as
    unit milliV {expo: -1};
  enddef;
  def unit millis_per_milliV as
    unit milliV {expo: -1};
    unit millis;
  enddef;
  def unit per_V as
    unit volt {expo: -1};
  enddef;
  def unit milliV_per_V as
    unit milliV;
    unit volt {expo: -1};
  enddef;
  def unit V_per_milliV as
    unit volt;
    unit milliV {expo: -1};
  enddef;
  def unit V_per_s as
    unit volt;
    unit second {expo: -1};
  enddef;
  def unit milliV_per_kiloV as
    unit volt {pref: milli};
    unit volt {expo: -1, pref: kilo};
  enddef;
  def unit V2 as
    unit volt {expo: 2};
  enddef;
  def unit milliV2 as
    unit volt {expo: 2, pref: milli};
  enddef;
  def unit millimol as
    unit mole {pref: milli};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit per_millimolar as
    unit millimolar {expo: -1};
  enddef;
  def unit per_millimolar_s as
    unit millimolar {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit per_millimolar2_s as
    unit millimolar {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit millimolar_per_s as
    unit millimolar;
    unit second {expo: -1};
  enddef;
  def unit millimolar_per_megamolar as
    unit millimolar;
    unit mole {expo: -1, pref: mega};
    unit litre;
  enddef;
  def unit per_millimol_milliS as
    unit mole {expo: -1, pref: milli};
    unit siemens {expo: -1, pref: milli};
  enddef;
  def unit per_millimol_millis as
    unit mole {expo: -1, pref: milli};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit per_millimol_s as
    unit mole {expo: -1, pref: milli};
    unit second {expo: -1};
  enddef;
  def unit microm as
    unit metre {pref: micro};
  enddef;
  def unit microS as
    unit siemens {pref: micro};
  enddef;
  def unit microm3 as
    unit microm {expo: 3};
  enddef;
  def unit m3_per_microm3 as
    unit m3;
    unit microm3 {expo: -1};
  enddef;
  def unit picoF as
    unit farad {pref: pico};
  enddef;
  def unit S_per_F as
    unit siemens;
    unit farad {expo: -1};
  enddef;
  def unit m3_per_Fs as
    unit metre {expo: 3};
    unit farad {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit A_per_F as
    unit ampere;
    unit farad {expo: -1};
  enddef;
  def unit megaOhm as
    unit ohm {pref: mega};
  enddef;
  def unit nanoA as
    unit ampere {pref: nano};
  enddef;
  def unit nanoA_per_milliA as
    unit ampere {pref: nano};
    unit ampere {expo: -1, pref: milli};
  enddef;
  def unit nanoA_per_A as
    unit ampere {pref: nano};
    unit ampere {expo: -1};
  enddef;
  def unit A_per_nanoA as
    unit ampere {expo: -1, pref: nano};
    unit ampere;
  enddef;
  def unit C_per_mol as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit m3_per_J_millis as
    unit metre {expo: 3};
    unit joule {expo: -1};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit m3_per_mol_millis as
    unit metre {expo: 3};
    unit mole {expo: -1};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit m3_per_millimol_s as
    unit metre {expo: 3};
    unit second {expo: -1};
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit millimol_per_m3 as
    unit metre {expo: -3};
    unit mole {pref: milli};
  enddef;
  def unit Hz2 as
    unit second {expo: -2};
  enddef;
  def unit cm as
    unit metre {pref: centi};
  enddef;
  def unit J_per_m4_s as
    unit metre {expo: -4};
    unit joule;
    unit second {expo: -1};
  enddef;
  def unit m3_per_mol_per_sec as
    unit metre {expo: 3};
    unit mole {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit mol_per_m3_per_kPa as
    unit mole;
    unit metre {expo: -3};
    unit pascal {expo: -1, pref: kilo};
  enddef;
  def unit mol_per_m3_per_Pa as
    unit mole;
    unit metre {expo: -3};
    unit pascal {expo: -1};
  enddef;
  def unit m3_per_mol_per_s as
    unit metre {expo: 3};
    unit mole {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit mol_per_m3_per_s as
    unit mole;
    unit metre {expo: -3};
    unit second {expo: -1};
  enddef;
  def unit dim as
    unit dimensionless;
  enddef;
  def unit fmol as
    unit mole {pref: femto};
  enddef;
  def unit per_fmol as
    unit fmol {expo: -1};
  enddef;
  def unit nJ_per_s as
    unit joule {pref: nano};
    unit second {expo: -1};
  enddef;
  def unit fmol_per_s as
    unit fmol;
    unit second {expo: -1};
  enddef;
  def unit nC_per_fmol as
    unit coulomb {pref: nano};
    unit fmol {expo: -1};
  enddef;
  def unit nC as
    unit coulomb {pref: nano};
  enddef;
  def unit nJ_per_fmol as
    unit joule {pref: nano};
    unit fmol {expo: -1};
  enddef;
  def unit nJ_per_nC as
    unit joule {pref: nano};
    unit nC {expo: -1};
  enddef;
  def unit fC as
    unit coulomb {pref: femto};
  enddef;
  def unit fF as
    unit farad {pref: femto};
  enddef;
  def unit volt_per_sec as
    unit second {expo: -1};
    unit volt;
  enddef;
  def unit J_per_K_per_mol as
    unit joule;
    unit kelvin {expo: -1};
    unit mole {expo: -1};
  enddef;
  def unit nS as
    unit siemens {pref: nano};
  enddef;
  def unit nSmV as
    unit nS;
    unit mV;
  enddef;
  def unit per_ms as
    unit second {expo: -1, pref: milli};
  enddef;
  def unit mM4 as
    unit mM {expo: 4};
  enddef;
  def unit mM_per_ms as
    unit mM;
    unit ms {expo: -1};
  enddef;
  def unit mMms as
    unit mM;
    unit ms;
  enddef;
  def unit per_mMms as
    unit mMms {expo: -1};
  enddef;
  def unit molar as
    unit mole;
    unit litre {expo: -1};
  enddef;
  def unit micromolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit nanomolar as
    unit mole {pref: nano};
    unit litre {expo: -1};
  enddef;
  def unit ms as
    unit second {pref: milli};
  enddef;
  def unit m_cubed as
    unit metre {pref: kilo};
  enddef;
  def unit mV as
    unit volt {pref: milli};
  enddef;
  def unit m_cubed_per_second as
    unit m_cubed;
    unit per_s;
  enddef;
  def unit micromolar_m_cubed as
    unit micromolar;
    unit m_cubed;
  enddef;
  def unit C as
    unit ampere;
    unit second;
  enddef;
  def unit C_per_millimol as
    unit C;
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit picoA as
    unit ampere {pref: pico};
  enddef;
  def unit picoA_per_picoFarad as
    unit picoA;
    unit picoFarad {expo: -1};
  enddef;
  def unit microL as
    unit litre {pref: micro};
  enddef;
  def unit picoFarad as
    unit farad {pref: pico};
  enddef;
  def unit cm3_per_second as
    unit metre {expo: 3, pref: centi};
    unit second {expo: -1};
  enddef;
  def unit um3_per_second as
    unit metre {expo: 3, pref: micro};
    unit second {expo: -1};
  enddef;
  def unit m3mM as
    unit metre {expo: 3};
    unit mM;
  enddef;
  def unit ms2 as
    unit ms {expo: 2};
  enddef;
  def unit nM3_per_ps as
    unit metre {expo: 3, pref: nano};
    unit second {expo: -1, pref: pico};
  enddef;
  def unit per_s_squared_m_cubed as
    unit second {expo: -2};
    unit metre {expo: -3};
  enddef;
  def unit per_meters_cubed as
    unit metre {expo: -3};
  enddef;
  def unit umeter3 as
    unit metre {expo: 3, pref: micro};
  enddef;
  def unit mill1 as
    unit volt {expo: -1};
    unit volt {pref: milli};
  enddef;
  def unit picoV as
    unit volt {pref: pico};
  enddef;
  def unit pic0 as
    unit volt {expo: -1};
    unit picoV;
  enddef;
  def unit nanoV as
    unit volt {pref: nano};
  enddef;
  def unit nan0 as
    unit volt {expo: -1};
    unit nanoV;
  enddef;
  def unit C_per_millimol_1 as
    unit C;
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit microm3_1 as
    unit microm {expo: 3};
  enddef;
  def unit per_mMms_1 as
    unit mMms {expo: -1};
  enddef;
  def unit mM_per_ms_1 as
    unit mol_per_m3;
    unit ms {expo: -1};
  enddef;
  def unit C_per_millimol_2 as
    unit C;
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit microm3_2 as
    unit microm {expo: 3};
  enddef;
  def unit per_mMms_2 as
    unit mMms {expo: -1};
  enddef;
  def unit mM_per_ms_2 as
    unit mol_per_m3;
    unit millis {expo: -1};
  enddef;
  def unit mM4_1 as
    unit mol_per_m3 {expo: 4};
  enddef;
  def unit mMms_1 as
    unit mol_per_m3;
    unit millis;
  enddef;
  def unit ms2_1 as
    unit millis {expo: 2};
  enddef;

  def comp parameters as
    var Ca_i_init_smc: mol_per_m3 {init: 0.000103, interface: public};
    var V_init_smc: milliV {init: -40.2576, interface: public};
    var F_smc: C_per_millimol_1 {init: 96.4853415, interface: public};
    var R_smc: J_per_mol_K {init: 8.314472, interface: public};
    var T_smc: kelvin {init: 295.2, interface: public};
    var Ca_out_smc: mol_per_m3 {init: 2, interface: public};
    var Ca_jun_init_smc: mol_per_m3 {init: 0.000252, interface: public};
    var Z_ca_smc: dimensionless {init: 2, interface: public};
    var Na_out_smc: mol_per_m3 {init: 130, interface: public};
    var Na_i_init_smc: mol_per_m3 {init: 8.84552, interface: public};
    var K_out_smc: mol_per_m3 {init: 5, interface: public};
    var K_i_init_smc: mol_per_m3 {init: 141.147, interface: public};
    var Pk_smc: dimensionless {init: 0.0289007, interface: public};
    var vol_cell_smc: microm3_1 {init: 1000, interface: public};
    var vol_SRcen_smc: microm3_1 {init: 50, interface: public};
    var vol_jun_smc: microm3_1 {init: 5, interface: public};
    var BUF_1_init_smc: mol_per_m3 {init: 0.00856984, interface: public};
    var Z_Na_smc: dimensionless {init: 1, interface: public};
    var Z_K_smc: dimensionless {init: 1, interface: public};
    var C_m_smc: picoF {init: 16, interface: public};
    var BUF_T_smc: mol_per_m3 {init: 0.3, interface: public};
    var K_BUF_on_smc: per_mMms_1 {init: 22, interface: public};
    var K_BUF_off_smc: per_ms {init: 0.077, interface: public};
    var BUF_jun_T_smc: mol_per_m3 {init: 0.3, interface: public};
    var CSQ_SRcen_T_smc: mol_per_m3 {init: 0.3, interface: public};
    var CSQ_SRper_T_smc: mol_per_m3 {init: 0.3, interface: public};
    var k_CSQ_on_smc: per_mMms_1 {init: 2, interface: public};
    var k_CSQ_off_smc: per_ms {init: 1.6, interface: public};
    var CSQ_SRcen1_init_smc: mol_per_m3 {init: 0.0344637, interface: public};
    var Ca_SRcen_init_smc: mol_per_m3 {init: 0.107090976209728, interface: public};
    var I_SERC_bar_smc: mM_per_ms_1 {init: 0.00000525, interface: public};
    var k_mSERCA_smc: mol_per_m3 {init: 0.000219, interface: public};
    var BUF_jun_1_init_smc: mol_per_m3 {init: 0.0198703, interface: public};
    var n_RyR_Ca_jun_smc: dimensionless {init: 1.2, interface: public};
    var R_10_init_smc: dimensionless {init: 0.000417, interface: public};
    var dL_init_smc: dimensionless {init: 0.00194629, interface: public};
    var dF_init_smc: dimensionless {init: 0.765146, interface: public};
    var I_PMCA_bar_smc: nSmV {init: 2.8, interface: public};
    var K_m_PMCA_smc: mol_per_m3 {init: 0.00017, interface: public};
    var G_Ca_b_smc: nS {init: 0.00255992, interface: public};
    var P_NCX_smc: nSmV {init: 0.0003, interface: public};
    var gammax_smc: dimensionless {init: 0.45, interface: public};
    var Q10_smc: dimensionless {init: 1.87, interface: public};
    var K_mNaK_k_smc: mol_per_m3 {init: 1.6, interface: public};
    var K_mNaK_na_smc: mol_per_m3 {init: 22, interface: public};
    var I_NaK_max_smc: nSmV {init: 104.16, interface: public};
    var G_Na_b_smc: nS {init: 0.001, interface: public};
    var G_K_b_smc: nS {init: 0.009, interface: public};
    var Pk_15_init_smc: dimensionless {init: 0.0686827, interface: public};
    var G_k15_smc: nS {init: 1.8, interface: public};
    var PnsK_smc: dimensionless {init: 1.3, interface: public};
    var PnsNa_smc: dimensionless {init: 0.9, interface: public};
    var gns_smc: nS {init: 0.5535, interface: public};
    var gnsNa_smc: dimensionless {init: 0.5, interface: public};
    var gnsK_smc: dimensionless {init: 0.1, interface: public};
    var Pk_21_init_smc: dimensionless {init: 0.0289007, interface: public};
    var G_k21_smc: nS {init: 0.7, interface: public};
    var BK_T_smc: dimensionless {init: 8, interface: public};
    var Perm_BKCa_smc: cm3_per_second {init: 4E-13, interface: public};
    var x_ab_init_smc: dimensionless {init: 0.00733279, interface: public};
    var g_piezo_channel: nS {init: 4, interface: public};
    var m_V_init_piezo_channel: dimensionless {init: 0.01, interface: public};
    var tau_V_piezo_channel: millis {init: 10, interface: public};
    var V_50_piezo_channel: milliV {init: -60, interface: public};
    var k_V_piezo_channel: milliV {init: 4.352, interface: public};
    var m_r_init_piezo_channel: dimensionless {init: 0.001, interface: public};
    var tau_r_piezo_channel: millis {init: 10, interface: public};
    var r_50_piezo_channel: dimensionless {init: 1.5, interface: public};
    var k_r_piezo_channel: dimensionless {init: 0.0653, interface: public};
    var r_ratio_piezo_channel: dimensionless {init: 1.2, interface: public};
  enddef;

  def comp parameters_global as
  enddef;

  def comp environment as
    var time: second {interface: public};
  enddef;

  def comp smc_module as
    var t: millis {interface: public};
    var I_piezo: nSmV {interface: public};
    var Ca_i_init: mol_per_m3 {interface: public};
    var V_init: milliV {interface: public};
    var F: C_per_millimol_2 {interface: public};
    var R: J_per_mol_K {interface: public};
    var T: kelvin {interface: public};
    var Ca_out: mol_per_m3 {interface: public};
    var Ca_jun_init: mol_per_m3 {interface: public};
    var Z_ca: dimensionless {interface: public};
    var Na_out: mol_per_m3 {interface: public};
    var Na_i_init: mol_per_m3 {interface: public};
    var K_out: mol_per_m3 {interface: public};
    var K_i_init: mol_per_m3 {interface: public};
    var Pk: dimensionless {interface: public};
    var I_Ca_total: nSmV {interface: public};
    var I_Na_total: nSmV {interface: public};
    var I_K_total: nSmV {interface: public};
    var I_KvAll: nSmV {interface: public};
    var vol_cell: microm3_2 {interface: public};
    var vol_SRcen: microm3_2 {interface: public};
    var vol_jun: microm3_2 {interface: public};
    var BUF_1_init: mol_per_m3 {interface: public};
    var Z_Na: dimensionless {interface: public};
    var Z_K: dimensionless {interface: public};
    var C_m: picoF {interface: public};
    var BUF_T: mol_per_m3 {interface: public};
    var K_BUF_on: per_mMms_2 {interface: public};
    var K_BUF_off: per_ms {interface: public};
    var BUF_jun_T: mol_per_m3 {interface: public};
    var CSQ_SRcen_T: mol_per_m3 {interface: public};
    var CSQ_SRper_T: mol_per_m3 {interface: public};
    var k_CSQ_on: per_mMms_2 {interface: public};
    var k_CSQ_off: per_ms {interface: public};
    var CSQ_SRcen1_init: mol_per_m3 {interface: public};
    var Ca_SRcen_init: mol_per_m3 {interface: public};
    var I_SERC_bar: mM_per_ms_2 {interface: public};
    var I_SERC_bar_init: dimensionless {interface: public};
    var k_mSERCA: mol_per_m3 {interface: public};
    var J_SERCA: mM_per_ms_2 {interface: public};
    var BUF_jun_1_init: mol_per_m3 {interface: public};
    var J_rel: mM_per_ms_2 {interface: public};
    var J_jun_in: mM_per_ms_2 {interface: public};
    var n_RyR_Ca_jun: dimensionless {interface: public};
    var R_10_init: dimensionless {interface: public};
    var Y_RyR_Ca_jun: dimensionless {interface: public};
    var tau_alpha: millis {interface: public};
    var alpha_inf: dimensionless {interface: public};
    var dL_init: dimensionless {interface: public};
    var dF_init: dimensionless {interface: public};
    var alpha_act: millis {interface: public};
    var beta_act: millis {interface: public};
    var dL_bar: dimensionless {interface: public};
    var tau_dL: millis {interface: public};
    var alpha_ina: millis {interface: public};
    var beta_ina: millis {interface: public};
    var dF_bar: dimensionless {interface: public};
    var tau_dF: millis {interface: public};
    var I_CaV: nSmV {interface: public};
    var I_PMCA_bar: nSmV {interface: public};
    var K_m_PMCA: mol_per_m3 {interface: public};
    var I_PMCA: nSmV {interface: public};
    var G_Ca_b: nS {interface: public};
    var E_Ca: milliV {interface: public};
    var I_Ca_leak: nSmV {interface: public};
    var P_NCX: nSmV {interface: public};
    var gammax: dimensionless {interface: public};
    var phi_f: dimensionless {interface: public};
    var phi_r: dimensionless {interface: public};
    var X_NCX: dimensionless {interface: public};
    var I_NCX: nSmV {interface: public};
    var Q10: dimensionless {interface: public};
    var K_mNaK_k: mol_per_m3 {interface: public};
    var K_mNaK_na: mol_per_m3 {interface: public};
    var N_pow: dimensionless {interface: public};
    var N_1: dimensionless {interface: public};
    var N_2: dimensionless {interface: public};
    var N_0: dimensionless {interface: public};
    var I_NaK: nSmV {interface: public};
    var I_NaK_max: nSmV {interface: public};
    var G_Na_b: nS {interface: public};
    var E_Na: milliV {interface: public};
    var I_Na_Leak: nSmV {interface: public};
    var G_K_b: nS {interface: public};
    var E_K: milliV {interface: public};
    var I_K_Leak: nSmV {interface: public};
    var alpha_x: dimensionless {interface: public};
    var beta_x: dimensionless {interface: public};
    var Pk_bar: dimensionless {interface: public};
    var tau_Pk: millis {interface: public};
    var Pk_15_init: dimensionless {interface: public};
    var G_k15: nS {interface: public};
    var I_Kv15: nSmV {interface: public};
    var PnsK: dimensionless {interface: public};
    var PnsNa: dimensionless {interface: public};
    var gns: nS {interface: public};
    var gnsNa: dimensionless {interface: public};
    var gnsK: dimensionless {interface: public};
    var E_NSC: milliV {interface: public};
    var I_NSC: nSmV {interface: public};
    var I_NSC_Na: nSmV {interface: public};
    var I_NSC_K: nSmV {interface: public};
    var alpha_x21: dimensionless {interface: public};
    var beta_x21: dimensionless {interface: public};
    var Pk_bar21: dimensionless {interface: public};
    var tau_Pk21: millis {interface: public};
    var Pk_21_init: dimensionless {interface: public};
    var G_k21: nS {interface: public};
    var I_Kv21: nSmV {interface: public};
    var BK_T: dimensionless {interface: public};
    var Perm_BKCa: cm3_per_second {interface: public};
    var xabss_z: dimensionless {interface: public};
    var xabss_vh: milliV {interface: public};
    var xabss: dimensionless {interface: public};
    var xabtc: millis {interface: public};
    var x_ab_init: dimensionless {interface: public};
    var I_BKCa: nSmV {interface: public};
    var I_leak_all: nSmV {interface: public};
    var I_total: nSmV {interface: public};
    var Ca_i: mol_per_m3 {init: Ca_i_init, interface: public};
    var V: milliV {init: V_init, interface: public};
    var Ca_jun: mol_per_m3 {init: Ca_jun_init, interface: public};
    var Na_i: mol_per_m3 {init: Na_i_init, interface: public};
    var K_i: mol_per_m3 {init: K_i_init, interface: public};
    var BUF_1: mol_per_m3 {init: BUF_1_init, interface: public};
    var CSQ_SRcen1: mol_per_m3 {init: CSQ_SRcen1_init, interface: public};
    var Ca_SRcen: mol_per_m3 {init: Ca_SRcen_init, interface: public};
    var BUF_jun_1: mol_per_m3 {init: BUF_jun_1_init, interface: public};
    var R_10: dimensionless {init: R_10_init, interface: public};
    var dL: dimensionless {init: dL_init, interface: public};
    var dF: dimensionless {init: dF_init, interface: public};
    var Pk_15: dimensionless {init: Pk_15_init, interface: public};
    var Pk_21: dimensionless {init: Pk_21_init, interface: public};
    var x_ab: dimensionless {init: x_ab_init, interface: public};
    I_Ca_total = I_CaV+I_Ca_leak+I_PMCA-2{dimensionless}*I_NCX;
    I_Na_total = 3{dimensionless}*I_NCX+3{dimensionless}*I_NaK+I_NSC_Na+I_Na_Leak+I_piezo;
    ode(Na_i, t) = -I_Na_total/(Z_Na*F*vol_cell);
    I_KvAll = I_Kv15+I_Kv21;
    I_K_total = I_KvAll-2{dimensionless}*I_NaK+I_K_Leak+I_BKCa+I_NSC_K;
    ode(K_i, t) = -I_K_total/(Z_K*F*vol_cell);
    ode(Ca_i, t) = -I_Ca_total/(2{dimensionless}*F*vol_cell)-J_SERCA-(K_BUF_on*Ca_i*(BUF_T-BUF_1)-K_BUF_off*BUF_1)+J_jun_in;
    ode(BUF_1, t) = K_BUF_on*Ca_i*(BUF_T-BUF_1)-K_BUF_off*BUF_1;
    I_SERC_bar_init = 0.0000035{dimensionless}*1.5{dimensionless};
    J_SERCA = I_SERC_bar*sqr(Ca_i)/(sqr(Ca_i)+sqr(k_mSERCA));
    ode(CSQ_SRcen1, t) = k_CSQ_on*Ca_SRcen*(CSQ_SRcen_T-CSQ_SRcen1)-k_CSQ_off*CSQ_SRcen1;
    ode(Ca_SRcen, t) = J_SERCA*vol_cell/vol_SRcen-J_rel*vol_cell/vol_SRcen;
    ode(BUF_jun_1, t) = K_BUF_on*Ca_jun*(BUF_jun_T-BUF_jun_1)-K_BUF_off*BUF_jun_1;
    ode(Ca_jun, t) = J_rel*vol_cell/vol_jun-J_jun_in*vol_cell/vol_jun;
    Y_RyR_Ca_jun = 1{dimensionless}/(1{dimensionless}+pow(0.12{mol_per_m3}/Ca_SRcen, 5{dimensionless}));
    tau_alpha = 1{mMms_1}/(500{dimensionless}*(pow(Ca_jun/1{mol_per_m3}, n_RyR_Ca_jun)*Y_RyR_Ca_jun+pow(0.065{mol_per_m3}, n_RyR_Ca_jun)));
    alpha_inf = pow(Ca_jun, n_RyR_Ca_jun)*Y_RyR_Ca_jun/(pow(Ca_jun/1{mol_per_m3}, n_RyR_Ca_jun)*Y_RyR_Ca_jun+pow(0.065{dimensionless}, n_RyR_Ca_jun));
    ode(R_10, t) = (alpha_inf-R_10)/tau_alpha;
    J_rel = 0.0022{per_ms}*R_10*(Ca_SRcen-Ca_jun);
    J_jun_in = 0.0008{per_ms}*(Ca_jun-Ca_i);
    alpha_act = 0.3321{millis}*exp(V/12.9372{milliV});
    beta_act = 0.1557{millis}*exp(V/(-10.3606{milliV}));
    dL_bar = 1{dimensionless}/(1{dimensionless}+beta_act/alpha_act);
    tau_dL = 1{ms2_1}/(alpha_act+beta_act)+1.763{millis};
    ode(dL, t) = (dL_bar-dL)/tau_dL;
    alpha_ina = 0.0028{millis}*exp(V/(-54.1923{milliV}));
    beta_ina = 0.0111{millis}*exp(V/22.3706{milliV});
    dF_bar = 1{dimensionless}/(1{dimensionless}+beta_ina/alpha_ina);
    tau_dF = 1{ms2_1}/(alpha_ina+beta_ina)+74.28{millis};
    ode(dF, t) = (dF_bar-dF)/tau_dF;
    I_CaV = 0.22{nM3_per_ps}*dL*dF*sqr(Z_ca)*F*F/(R*T)*V*(Ca_i*exp(Z_ca*F*V/(R*T))-Ca_out)/(exp(Z_ca*F*V/(R*T))-1{dimensionless});
    I_PMCA = I_PMCA_bar*sqr(Ca_i)/(sqr(Ca_i)+sqr(K_m_PMCA));
    E_Ca = 0.5{dimensionless}*R*T/F*ln(Ca_out/Ca_i);
    I_Ca_leak = G_Ca_b*(V-E_Ca);
    phi_f = exp(gammax*V*F/(R*T));
    phi_r = exp((gammax-1{dimensionless})*V*F/(R*T));
    X_NCX = (pow(Na_i, 3{dimensionless})*Ca_out*phi_f-pow(Na_out, 3{dimensionless})*Ca_i*phi_r)/(1{mM4_1}+0.0003{dimensionless}*(pow(Na_out, 3{dimensionless})*Ca_i+pow(Na_i, 3{dimensionless})*Ca_out));
    I_NCX = P_NCX*X_NCX;
    N_pow = pow(Q10, (T-309.2{kelvin})/10{kelvin});
    N_1 = pow(K_out, 1.1{dimensionless})/(pow(K_out, 1.1{dimensionless})+pow(K_mNaK_k, 1.1{dimensionless}));
    N_2 = pow(Na_i, 1.7{dimensionless})/(pow(Na_i, 1.7{dimensionless})+pow(K_mNaK_na, 1.7{dimensionless}));
    N_0 = 1{dimensionless}/(1{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*V*F/(R*T))+2.19e-3{dimensionless}*exp(Na_out/49.71{mol_per_m3})*exp(-1.9{dimensionless}*V*F/(R*T)));
    I_NaK = I_NaK_max*N_1*N_0*N_2*N_pow;
    E_Na = R*T/F*ln(Na_out/Na_i);
    I_Na_Leak = G_Na_b*(V-E_Na);
    E_K = R*T/F*ln(K_out/K_i);
    I_K_Leak = G_K_b*(V-E_K);
    alpha_x = 0.0717{dimensionless}*exp(V/12.9290{milliV});
    beta_x = 0.0533{dimensionless}*exp(V/191.7326{milliV});
    Pk_bar = 1{dimensionless}/(1{dimensionless}+beta_x/alpha_x);
    tau_Pk = 1{millis}/(alpha_x+beta_x)+0.3489{millis};
    ode(Pk_15, t) = (Pk_bar-Pk_15)/tau_Pk;
    I_Kv15 = G_k15*Pk_15*(V-E_K);
    E_NSC = R*T/F*ln((PnsK*K_out+PnsNa*Na_out)/(PnsK*K_i+PnsNa*Na_i));
    I_NSC = gnsNa*gns*(V-E_NSC)+gnsK*gns*(V-E_NSC);
    I_NSC_Na = gnsNa*gns*(V-E_NSC);
    I_NSC_K = gnsK*gns*(V-E_NSC);
    alpha_x21 = 0.0404{dimensionless}*exp(V/10.5223{milliV});
    beta_x21 = 0.0355{dimensionless}*exp(V/221.4151{milliV});
    Pk_bar21 = 1{dimensionless}/(1{dimensionless}+beta_x21/alpha_x21);
    tau_Pk21 = 1{millis}/(alpha_x21+beta_x21)+11.4616{millis};
    ode(Pk_21, t) = (Pk_bar21-Pk_21)/tau_Pk21;
    I_Kv21 = G_k21*Pk_21*(V-E_K);
    xabss_z = -0.681249{dimensionless}/(1{dimensionless}+sqr((Ca_jun*1000.0{dimensionless}-0.218988{mol_per_m3})/0.428335{mol_per_m3}))+1.40001{dimensionless}/(1{dimensionless}+sqr((Ca_jun*1000.0{dimensionless}+228.71{mol_per_m3})/684.946{mol_per_m3}));
    xabss_vh = 8540.23{milliV}/pow((Ca_jun*1000.0{dimensionless}+0.401189{mol_per_m3})/0.00399115{mol_per_m3}, 0.668054{dimensionless})-109.28{milliV};
    xabss = 1.0{dimensionless}/(1.0{dimensionless}+exp(-xabss_z*F*(V-xabss_vh)/(R*T)));
    xabtc = 13.8049{millis}/(1.0{dimensionless}+sqr((V-153.019{milliV})/66.4952{milliV}));
    ode(x_ab, t) = (xabss-x_ab)/xabtc;
    I_BKCa = 1e9{nanoA_per_A}*BK_T*Perm_BKCa*x_ab*F*F*V/(R*T)*(K_i*exp(Z_K*F*V/(R*T))-K_out)/(exp(Z_K*F*V/(R*T))-1{dimensionless});
    I_leak_all = I_Ca_leak+I_Na_Leak+I_K_Leak;
    I_total = I_CaV+I_leak_all+I_PMCA+I_NCX+I_NaK+I_KvAll+I_NSC_Na+I_NSC_K+I_BKCa+I_piezo;
    ode(V, t) = -I_total/C_m;
  enddef;

  def comp piezo_channel_module as
    var t: millis {interface: public};
    var Vm: milliV {interface: public};
    var g: nS {interface: public};
    var m_V: dimensionless {init: m_V_init, interface: public};
    var m_V_init: dimensionless {interface: public};
    var m_V_inf: dimensionless {interface: public};
    var tau_V: millis {interface: public};
    var V_50: milliV {interface: public};
    var I_piezo: nSmV {interface: public};
    var E_Na: milliV {interface: public};
    var k_V: milliV {interface: public};
    var m_r: dimensionless {init: m_r_init, interface: public};
    var m_r_init: dimensionless {interface: public};
    var m_r_inf: dimensionless {interface: public};
    var tau_r: millis {interface: public};
    var k_r: dimensionless {interface: public};
    var r_50: dimensionless {interface: public};
    var r_ratio: dimensionless {interface: public};
    I_piezo = g*m_V*m_r*(Vm-E_Na);
    ode(m_V, t) = (m_V_inf-m_V)/tau_V;
    m_V_inf = 1{dimensionless}/(1{dimensionless}+exp(-(Vm-V_50)/k_V));
    // !!!!! Below here include the equations for stretch sensitive gating.
    ode(m_r, t) = (m_r_inf-m_r)/tau_r;
    m_r_inf = 1{dimensionless}/(1{dimensionless}+exp(-(r_ratio-r_50)/k_r));
  enddef;

  def comp terminal_venous_connection as
  enddef;

  def comp smc as
    var I_Ca_total: picoA {interface: public};
    var I_Na_total: picoA {interface: public};
    var I_K_total: picoA {interface: public};
    var I_KvAll: picoA {interface: public};
    var J_SERCA: mM_per_ms {interface: public};
    var J_rel: mM_per_ms {interface: public};
    var J_jun_in: mM_per_ms {interface: public};
    var Y_RyR_Ca_jun: dimensionless {interface: public};
    var tau_alpha: ms {interface: public};
    var alpha_inf: dimensionless {interface: public};
    var alpha_act: ms {interface: public};
    var beta_act: ms {interface: public};
    var dL_bar: dimensionless {interface: public};
    var tau_dL: ms {interface: public};
    var alpha_ina: ms {interface: public};
    var beta_ina: ms {interface: public};
    var dF_bar: dimensionless {interface: public};
    var tau_dF: ms {interface: public};
    var I_CaV: picoA {interface: public};
    var I_PMCA: picoA {interface: public};
    var E_Ca: mV {interface: public};
    var I_Ca_leak: picoA {interface: public};
    var phi_f: dimensionless {interface: public};
    var phi_r: dimensionless {interface: public};
    var X_NCX: dimensionless {interface: public};
    var I_NCX: picoA {interface: public};
    var N_2: dimensionless {interface: public};
    var N_0: dimensionless {interface: public};
    var I_NaK: picoA {interface: public};
    var E_Na: mV {interface: public};
    var I_Na_Leak: picoA {interface: public};
    var E_K: mV {interface: public};
    var I_K_Leak: picoA {interface: public};
    var alpha_x: dimensionless {interface: public};
    var beta_x: dimensionless {interface: public};
    var Pk_bar: dimensionless {interface: public};
    var tau_Pk: ms {interface: public};
    var I_Kv15: picoA {interface: public};
    var E_NSC: mV {interface: public};
    var I_NSC: picoA {interface: public};
    var I_NSC_Na: picoA {interface: public};
    var I_NSC_K: picoA {interface: public};
    var alpha_x21: dimensionless {interface: public};
    var beta_x21: dimensionless {interface: public};
    var Pk_bar21: dimensionless {interface: public};
    var tau_Pk21: ms {interface: public};
    var I_Kv21: picoA {interface: public};
    var xabss_z: dimensionless {interface: public};
    var xabss_vh: mV {interface: public};
    var xabss: dimensionless {interface: public};
    var xabtc: ms {interface: public};
    var I_BKCa: picoA {interface: public};
    var I_leak_all: picoA {interface: public};
    var I_total: picoA {interface: public};
    var Ca_i_init: mM {interface: public};
    var V_init: mV {interface: public};
    var F: C_per_millimol {interface: public};
    var R: J_per_mol_K {interface: public};
    var T: kelvin {interface: public};
    var Ca_out: mM {interface: public};
    var Ca_jun_init: mM {interface: public};
    var Z_ca: dimensionless {interface: public};
    var Na_out: mM {interface: public};
    var Na_i_init: mM {interface: public};
    var K_out: mM {interface: public};
    var K_i_init: mM {interface: public};
    var Pk: dimensionless {interface: public};
    var vol_cell: microm3 {interface: public};
    var vol_SRcen: microm3 {interface: public};
    var vol_jun: microm3 {interface: public};
    var BUF_1_init: mM {interface: public};
    var Z_Na: dimensionless {interface: public};
    var Z_K: dimensionless {interface: public};
    var C_m: picoFarad {interface: public};
    var BUF_T: mM {interface: public};
    var K_BUF_on: per_mMms {interface: public};
    var K_BUF_off: per_ms {interface: public};
    var BUF_jun_T: mM {interface: public};
    var CSQ_SRcen_T: mM {interface: public};
    var CSQ_SRper_T: mM {interface: public};
    var k_CSQ_on: per_mMms {interface: public};
    var k_CSQ_off: per_ms {interface: public};
    var CSQ_SRcen1_init: mM {interface: public};
    var Ca_SRcen_init: mM {interface: public};
    var I_SERC_bar: mM_per_ms {interface: public};
    var k_mSERCA: mM {interface: public};
    var BUF_jun_1_init: mM {interface: public};
    var n_RyR_Ca_jun: dimensionless {interface: public};
    var R_10_init: dimensionless {interface: public};
    var dL_init: dimensionless {interface: public};
    var dF_init: dimensionless {interface: public};
    var I_PMCA_bar: picoA {interface: public};
    var K_m_PMCA: mM {interface: public};
    var G_Ca_b: nS {interface: public};
    var P_NCX: picoA {interface: public};
    var gammax: dimensionless {interface: public};
    var Q10: dimensionless {interface: public};
    var K_mNaK_k: mM {interface: public};
    var K_mNaK_na: mM {interface: public};
    var I_NaK_max: picoA {interface: public};
    var G_Na_b: nS {interface: public};
    var G_K_b: nS {interface: public};
    var Pk_15_init: dimensionless {interface: public};
    var G_k15: nS {interface: public};
    var PnsK: dimensionless {interface: public};
    var PnsNa: dimensionless {interface: public};
    var gns: nS {interface: public};
    var gnsNa: dimensionless {interface: public};
    var gnsK: dimensionless {interface: public};
    var Pk_21_init: dimensionless {interface: public};
    var G_k21: nS {interface: public};
    var BK_T: dimensionless {interface: public};
    var Perm_BKCa: cm3_per_second {interface: public};
    var x_ab_init: dimensionless {interface: public};
    var Ca_i: mM {interface: public};
    var V: mV {interface: public};
    var Ca_jun: mM {interface: public};
    var Na_i: mM {interface: public};
    var K_i: mM {interface: public};
    var BUF_1: mM {interface: public};
    var CSQ_SRcen1: mM {interface: public};
    var Ca_SRcen: mM {interface: public};
    var BUF_jun_1: mM {interface: public};
    var R_10: dimensionless {interface: public};
    var dL: dimensionless {interface: public};
    var dF: dimensionless {interface: public};
    var Pk_15: dimensionless {interface: public};
    var Pk_21: dimensionless {interface: public};
    var x_ab: dimensionless {interface: public};
  enddef;

  def comp piezo_channel as
    var I_piezo: picoA {interface: public};
    var g: nS {interface: public};
    var m_V: dimensionless {interface: public};
    var m_V_init: dimensionless {interface: public};
    var m_V_inf: dimensionless {interface: public};
    var tau_V: ms {interface: public};
    var V_50: milliV {interface: public};
    var k_V: milliV {interface: public};
    var m_r: dimensionless {interface: public};
    var m_r_init: dimensionless {interface: public};
    var m_r_inf: dimensionless {interface: public};
    var tau_r: ms {interface: public};
    var r_50: dimensionless {interface: public};
    var k_r: dimensionless {interface: public};
    var r_ratio: dimensionless {interface: public};
  enddef;
  def map between parameters and smc_module for
    vars Ca_i_init_smc and Ca_i_init;
    vars V_init_smc and V_init;
    vars F_smc and F;
    vars R_smc and R;
    vars T_smc and T;
    vars Ca_out_smc and Ca_out;
    vars Ca_jun_init_smc and Ca_jun_init;
    vars Z_ca_smc and Z_ca;
    vars Na_out_smc and Na_out;
    vars Na_i_init_smc and Na_i_init;
    vars K_out_smc and K_out;
    vars K_i_init_smc and K_i_init;
    vars Pk_smc and Pk;
    vars vol_cell_smc and vol_cell;
    vars vol_SRcen_smc and vol_SRcen;
    vars vol_jun_smc and vol_jun;
    vars BUF_1_init_smc and BUF_1_init;
    vars Z_Na_smc and Z_Na;
    vars Z_K_smc and Z_K;
    vars C_m_smc and C_m;
    vars BUF_T_smc and BUF_T;
    vars K_BUF_on_smc and K_BUF_on;
    vars K_BUF_off_smc and K_BUF_off;
    vars BUF_jun_T_smc and BUF_jun_T;
    vars CSQ_SRcen_T_smc and CSQ_SRcen_T;
    vars CSQ_SRper_T_smc and CSQ_SRper_T;
    vars k_CSQ_on_smc and k_CSQ_on;
    vars k_CSQ_off_smc and k_CSQ_off;
    vars CSQ_SRcen1_init_smc and CSQ_SRcen1_init;
    vars Ca_SRcen_init_smc and Ca_SRcen_init;
    vars I_SERC_bar_smc and I_SERC_bar;
    vars k_mSERCA_smc and k_mSERCA;
    vars BUF_jun_1_init_smc and BUF_jun_1_init;
    vars n_RyR_Ca_jun_smc and n_RyR_Ca_jun;
    vars R_10_init_smc and R_10_init;
    vars dL_init_smc and dL_init;
    vars dF_init_smc and dF_init;
    vars I_PMCA_bar_smc and I_PMCA_bar;
    vars K_m_PMCA_smc and K_m_PMCA;
    vars G_Ca_b_smc and G_Ca_b;
    vars P_NCX_smc and P_NCX;
    vars gammax_smc and gammax;
    vars Q10_smc and Q10;
    vars K_mNaK_k_smc and K_mNaK_k;
    vars K_mNaK_na_smc and K_mNaK_na;
    vars I_NaK_max_smc and I_NaK_max;
    vars G_Na_b_smc and G_Na_b;
    vars G_K_b_smc and G_K_b;
    vars Pk_15_init_smc and Pk_15_init;
    vars G_k15_smc and G_k15;
    vars PnsK_smc and PnsK;
    vars PnsNa_smc and PnsNa;
    vars gns_smc and gns;
    vars gnsNa_smc and gnsNa;
    vars gnsK_smc and gnsK;
    vars Pk_21_init_smc and Pk_21_init;
    vars G_k21_smc and G_k21;
    vars BK_T_smc and BK_T;
    vars Perm_BKCa_smc and Perm_BKCa;
    vars x_ab_init_smc and x_ab_init;
  enddef;
  def map between parameters and piezo_channel_module for
    vars g_piezo_channel and g;
    vars m_V_init_piezo_channel and m_V_init;
    vars tau_V_piezo_channel and tau_V;
    vars V_50_piezo_channel and V_50;
    vars k_V_piezo_channel and k_V;
    vars m_r_init_piezo_channel and m_r_init;
    vars tau_r_piezo_channel and tau_r;
    vars r_50_piezo_channel and r_50;
    vars k_r_piezo_channel and k_r;
    vars r_ratio_piezo_channel and r_ratio;
  enddef;
  def map between environment and smc_module for
    vars time and t;
  enddef;
  def map between environment and piezo_channel_module for
    vars time and t;
  enddef;
  def map between smc_module and piezo_channel_module for
    vars I_piezo and I_piezo;
    vars E_Na and E_Na;
    vars V and Vm;
  enddef;
  def map between smc_module and smc for
    vars Ca_i_init and Ca_i_init;
    vars V_init and V_init;
    vars F and F;
    vars R and R;
    vars T and T;
    vars Ca_out and Ca_out;
    vars Ca_jun_init and Ca_jun_init;
    vars Z_ca and Z_ca;
    vars Na_out and Na_out;
    vars Na_i_init and Na_i_init;
    vars K_out and K_out;
    vars K_i_init and K_i_init;
    vars Pk and Pk;
    vars I_Ca_total and I_Ca_total;
    vars I_Na_total and I_Na_total;
    vars I_K_total and I_K_total;
    vars I_KvAll and I_KvAll;
    vars vol_cell and vol_cell;
    vars vol_SRcen and vol_SRcen;
    vars vol_jun and vol_jun;
    vars BUF_1_init and BUF_1_init;
    vars Z_Na and Z_Na;
    vars Z_K and Z_K;
    vars C_m and C_m;
    vars BUF_T and BUF_T;
    vars K_BUF_on and K_BUF_on;
    vars K_BUF_off and K_BUF_off;
    vars BUF_jun_T and BUF_jun_T;
    vars CSQ_SRcen_T and CSQ_SRcen_T;
    vars CSQ_SRper_T and CSQ_SRper_T;
    vars k_CSQ_on and k_CSQ_on;
    vars k_CSQ_off and k_CSQ_off;
    vars CSQ_SRcen1_init and CSQ_SRcen1_init;
    vars Ca_SRcen_init and Ca_SRcen_init;
    vars I_SERC_bar and I_SERC_bar;
    vars k_mSERCA and k_mSERCA;
    vars J_SERCA and J_SERCA;
    vars BUF_jun_1_init and BUF_jun_1_init;
    vars J_rel and J_rel;
    vars J_jun_in and J_jun_in;
    vars n_RyR_Ca_jun and n_RyR_Ca_jun;
    vars R_10_init and R_10_init;
    vars Y_RyR_Ca_jun and Y_RyR_Ca_jun;
    vars tau_alpha and tau_alpha;
    vars alpha_inf and alpha_inf;
    vars dL_init and dL_init;
    vars dF_init and dF_init;
    vars alpha_act and alpha_act;
    vars beta_act and beta_act;
    vars dL_bar and dL_bar;
    vars tau_dL and tau_dL;
    vars alpha_ina and alpha_ina;
    vars beta_ina and beta_ina;
    vars dF_bar and dF_bar;
    vars tau_dF and tau_dF;
    vars I_CaV and I_CaV;
    vars I_PMCA_bar and I_PMCA_bar;
    vars K_m_PMCA and K_m_PMCA;
    vars I_PMCA and I_PMCA;
    vars G_Ca_b and G_Ca_b;
    vars E_Ca and E_Ca;
    vars I_Ca_leak and I_Ca_leak;
    vars P_NCX and P_NCX;
    vars gammax and gammax;
    vars phi_f and phi_f;
    vars phi_r and phi_r;
    vars X_NCX and X_NCX;
    vars I_NCX and I_NCX;
    vars Q10 and Q10;
    vars K_mNaK_k and K_mNaK_k;
    vars K_mNaK_na and K_mNaK_na;
    vars N_2 and N_2;
    vars N_0 and N_0;
    vars I_NaK and I_NaK;
    vars I_NaK_max and I_NaK_max;
    vars G_Na_b and G_Na_b;
    vars E_Na and E_Na;
    vars I_Na_Leak and I_Na_Leak;
    vars G_K_b and G_K_b;
    vars E_K and E_K;
    vars I_K_Leak and I_K_Leak;
    vars alpha_x and alpha_x;
    vars beta_x and beta_x;
    vars Pk_bar and Pk_bar;
    vars tau_Pk and tau_Pk;
    vars Pk_15_init and Pk_15_init;
    vars G_k15 and G_k15;
    vars I_Kv15 and I_Kv15;
    vars PnsK and PnsK;
    vars PnsNa and PnsNa;
    vars gns and gns;
    vars gnsNa and gnsNa;
    vars gnsK and gnsK;
    vars E_NSC and E_NSC;
    vars I_NSC and I_NSC;
    vars I_NSC_Na and I_NSC_Na;
    vars I_NSC_K and I_NSC_K;
    vars alpha_x21 and alpha_x21;
    vars beta_x21 and beta_x21;
    vars Pk_bar21 and Pk_bar21;
    vars tau_Pk21 and tau_Pk21;
    vars Pk_21_init and Pk_21_init;
    vars G_k21 and G_k21;
    vars I_Kv21 and I_Kv21;
    vars BK_T and BK_T;
    vars Perm_BKCa and Perm_BKCa;
    vars xabss_z and xabss_z;
    vars xabss_vh and xabss_vh;
    vars xabss and xabss;
    vars xabtc and xabtc;
    vars x_ab_init and x_ab_init;
    vars I_BKCa and I_BKCa;
    vars I_leak_all and I_leak_all;
    vars I_total and I_total;
    vars Ca_i and Ca_i;
    vars V and V;
    vars Ca_jun and Ca_jun;
    vars Na_i and Na_i;
    vars K_i and K_i;
    vars BUF_1 and BUF_1;
    vars CSQ_SRcen1 and CSQ_SRcen1;
    vars Ca_SRcen and Ca_SRcen;
    vars BUF_jun_1 and BUF_jun_1;
    vars R_10 and R_10;
    vars dL and dL;
    vars dF and dF;
    vars Pk_15 and Pk_15;
    vars Pk_21 and Pk_21;
    vars x_ab and x_ab;
  enddef;
  def map between piezo_channel_module and piezo_channel for
    vars g and g;
    vars m_V and m_V;
    vars m_V_init and m_V_init;
    vars m_V_inf and m_V_inf;
    vars tau_V and tau_V;
    vars V_50 and V_50;
    vars I_piezo and I_piezo;
    vars k_V and k_V;
    vars m_r and m_r;
    vars m_r_init and m_r_init;
    vars m_r_inf and m_r_inf;
    vars tau_r and tau_r;
    vars k_r and k_r;
    vars r_50 and r_50;
    vars r_ratio and r_ratio;
  enddef;
enddef;
