def model modules as
  // ------------module_units------------//
  def import using "smc_with_piezo_units.cellml" for
    unit s2 using unit s2;
    unit Hz using unit Hz;
    unit millis using unit millis;
    unit per_millis using unit per_millis;
    unit mm using unit mm;
    unit m2 using unit m2;
    unit mm2 using unit mm2;
    unit m3 using unit m3;
    unit m4 using unit m4;
    unit mm3 using unit mm3;
    unit J_per_s using unit J_per_s;
    unit mol_per_s using unit mol_per_s;
    unit mmol_per_s using unit mmol_per_s;
    unit umol_per_s using unit umol_per_s;
    unit C_per_s using unit C_per_s;
    unit mC_per_s using unit mC_per_s;
    unit uC_per_s using unit uC_per_s;
    unit nC_per_s using unit nC_per_s;
    unit Cm_per_millis using unit Cm_per_millis;
    unit m_per_s using unit m_per_s;
    unit mm_per_s using unit mm_per_s;
    unit um_per_s using unit um_per_s;
    unit rad_per_s using unit rad_per_s;
    unit m3_per_s using unit m3_per_s;
    unit mL using unit mL;
    unit per_milliL_s using unit per_milliL_s;
    unit s_per_m3 using unit s_per_m3;
    unit s_per_milliV using unit s_per_milliV;
    unit s_per_millis using unit s_per_millis;
    unit millis_per_s using unit millis_per_s;
    unit mm3_per_s using unit mm3_per_s;
    unit l_per_s using unit l_per_s;
    unit per_ml_s using unit per_ml_s;
    unit J_per_mol using unit J_per_mol;
    unit J_per_kmol_K using unit J_per_kmol_K;
    unit J_per_M using unit J_per_M;
    unit J_per_C using unit J_per_C;
    unit J_per_C_s using unit J_per_C_s;
    unit J_per_m using unit J_per_m;
    unit J_per_m3 using unit J_per_m3;
    unit mmHg using unit mmHg;
    unit m3_per_J using unit m3_per_J;
    unit J_per_m3s using unit J_per_m3s;
    unit m3_per_Js using unit m3_per_Js;
    unit J2_per_m6 using unit J2_per_m6;
    unit Js2_per_C2 using unit Js2_per_C2;
    unit Js2_per_mol2 using unit Js2_per_mol2;
    unit Js_per_mol2 using unit Js_per_mol2;
    unit Js_per_C2 using unit Js_per_C2;
    unit J_per_mol2 using unit J_per_mol2;
    unit C2_per_J_s using unit C2_per_J_s;
    unit J_per_C2 using unit J_per_C2;
    unit C2_per_J using unit C2_per_J;
    unit mol_per_m3 using unit mol_per_m3;
    unit M using unit M;
    unit mM using unit mM;
    unit uM using unit uM;
    unit kg_per_m3 using unit kg_per_m3;
    unit m3_per_kg using unit m3_per_kg;
    unit per_m3 using unit per_m3;
    unit mol_per_m2_s using unit mol_per_m2_s;
    unit mM_m_per_s using unit mM_m_per_s;
    unit J_per_m2_s using unit J_per_m2_s;
    unit Js_per_m4 using unit Js_per_m4;
    unit mM_per_s using unit mM_per_s;
    unit per_s using unit per_s;
    unit per_mM_s using unit per_mM_s;
    unit m6_per_mol2_s using unit m6_per_mol2_s;
    unit m3_per_mol using unit m3_per_mol;
    unit mol_per_m3_s using unit mol_per_m3_s;
    unit per_mol using unit per_mol;
    unit J_per_mol_K using unit J_per_mol_K;
    unit m2_per_s using unit m2_per_s;
    unit per_C using unit per_C;
    unit per_m using unit per_m;
    unit per_mM using unit per_mM;
    unit Js2_per_m2 using unit Js2_per_m2;
    unit Js_per_m2 using unit Js_per_m2;
    unit J_per_m2 using unit J_per_m2;
    unit m_per_s2 using unit m_per_s2;
    unit rad_per_s2 using unit rad_per_s2;
    unit Js_per_m3 using unit Js_per_m3;
    unit Js2_per_m5 using unit Js2_per_m5;
    unit m5_per_Js2 using unit m5_per_Js2;
    unit J_per_m6 using unit J_per_m6;
    unit m6_per_J using unit m6_per_J;
    unit m6_per_Js using unit m6_per_Js;
    unit mm6_per_J using unit mm6_per_J;
    unit Js2_per_m9 using unit Js2_per_m9;
    unit m6s_per_J using unit m6s_per_J;
    unit Js_per_m6 using unit Js_per_m6;
    unit Js2_per_m6 using unit Js2_per_m6;
    unit m3_per_s2 using unit m3_per_s2;
    unit mm3_per_s2 using unit mm3_per_s2;
    unit per_mm3 using unit per_mm3;
    unit UnitValve using unit UnitValve;
    unit J_per_m9 using unit J_per_m9;
    unit milliV using unit milliV;
    unit per_milliV using unit per_milliV;
    unit millis_per_milliV using unit millis_per_milliV;
    unit per_V using unit per_V;
    unit milliV_per_V using unit milliV_per_V;
    unit V_per_milliV using unit V_per_milliV;
    unit V_per_s using unit V_per_s;
    unit milliV_per_kiloV using unit milliV_per_kiloV;
    unit V2 using unit V2;
    unit milliV2 using unit milliV2;
    unit millimol using unit millimol;
    unit millimolar using unit millimolar;
    unit per_millimolar using unit per_millimolar;
    unit per_millimolar_s using unit per_millimolar_s;
    unit per_millimolar2_s using unit per_millimolar2_s;
    unit millimolar_per_s using unit millimolar_per_s;
    unit millimolar_per_megamolar using unit millimolar_per_megamolar;
    unit per_millimol_milliS using unit per_millimol_milliS;
    unit per_millimol_millis using unit per_millimol_millis;
    unit per_millimol_s using unit per_millimol_s;
    unit microm using unit microm;
    unit microS using unit microS;
    unit microm3 using unit microm3;
    unit m3_per_microm3 using unit m3_per_microm3;
    unit picoF using unit picoF;
    unit S_per_F using unit S_per_F;
    unit m3_per_Fs using unit m3_per_Fs;
    unit A_per_F using unit A_per_F;
    unit megaOhm using unit megaOhm;
    unit nanoA using unit nanoA;
    unit nanoA_per_milliA using unit nanoA_per_milliA;
    unit nanoA_per_A using unit nanoA_per_A;
    unit A_per_nanoA using unit A_per_nanoA;
    unit C_per_mol using unit C_per_mol;
    unit m3_per_J_millis using unit m3_per_J_millis;
    unit m3_per_mol_millis using unit m3_per_mol_millis;
    unit m3_per_millimol_s using unit m3_per_millimol_s;
    unit millimol_per_m3 using unit millimol_per_m3;
    unit Hz2 using unit Hz2;
    unit cm using unit cm;
    unit J_per_m4_s using unit J_per_m4_s;
    unit m3_per_mol_per_sec using unit m3_per_mol_per_sec;
    unit mol_per_m3_per_kPa using unit mol_per_m3_per_kPa;
    unit mol_per_m3_per_Pa using unit mol_per_m3_per_Pa;
    unit m3_per_mol_per_s using unit m3_per_mol_per_s;
    unit mol_per_m3_per_s using unit mol_per_m3_per_s;
    unit dim using unit dim;
    unit fmol using unit fmol;
    unit per_fmol using unit per_fmol;
    unit nJ_per_s using unit nJ_per_s;
    unit fmol_per_s using unit fmol_per_s;
    unit nC_per_fmol using unit nC_per_fmol;
    unit nC using unit nC;
    unit nJ_per_fmol using unit nJ_per_fmol;
    unit nJ_per_nC using unit nJ_per_nC;
    unit fC using unit fC;
    unit fF using unit fF;
    unit volt_per_sec using unit volt_per_sec;
    unit J_per_K_per_mol using unit J_per_K_per_mol;
    unit nS using unit nS;
    unit nSmV using unit nSmV;
    unit per_ms using unit per_ms;
    unit mM4 using unit mM4;
    unit mM_per_ms using unit mM_per_ms;
    unit mMms using unit mMms;
    unit per_mMms using unit per_mMms;
    unit molar using unit molar;
    unit micromolar using unit micromolar;
    unit nanomolar using unit nanomolar;
    unit ms using unit ms;
    unit m_cubed using unit m_cubed;
    unit mV using unit mV;
    unit m_cubed_per_second using unit m_cubed_per_second;
    unit micromolar_m_cubed using unit micromolar_m_cubed;
    unit C using unit C;
    unit C_per_millimol using unit C_per_millimol;
    unit picoA using unit picoA;
    unit picoA_per_picoFarad using unit picoA_per_picoFarad;
    unit microL using unit microL;
    unit picoFarad using unit picoFarad;
    unit cm3_per_second using unit cm3_per_second;
    unit um3_per_second using unit um3_per_second;
    unit m3mM using unit m3mM;
    unit ms2 using unit ms2;
    unit nM3_per_ps using unit nM3_per_ps;
    unit per_s_squared_m_cubed using unit per_s_squared_m_cubed;
    unit per_meters_cubed using unit per_meters_cubed;
    unit umeter3 using unit umeter3;
    unit mill1 using unit mill1;
    unit picoV using unit picoV;
    unit pic0 using unit pic0;
    unit nanoV using unit nanoV;
    unit nan0 using unit nan0;
  enddef;

  def comp zero_flow as
    var v_zero: m3_per_s {pub: out};
    v_zero = 0{m3_per_s};
  enddef;

  def comp i_piezo_Na_tutorial as
    var t: ms {pub: in};
    var Vm: milliV {pub: in};
    var g: nS {pub: in};
    var m_V: dimensionless {init: m_V_init, pub: out};
    var m_V_init: dimensionless {pub: in};
    var m_V_inf: dimensionless {pub: out};
    var tau_V: ms {pub: in};
    var V_50: milliV {pub: in};
    var I_piezo: picoA {pub: out};
    var E_Na: milliV {pub: in};
    var k_V: milliV {pub: in};
    // !!!!! Here you need to define variables and constants used for the stretch sensitive gating.
    var m_r: dimensionless {init: m_r_init, pub: out};
    var m_r_init: dimensionless {pub: in};
    var m_r_inf: dimensionless {pub: out};
    var tau_r: ms {pub: in};
    var k_r: dimensionless {pub: in};
    var r_50: dimensionless {pub: in};
    var r_ratio: dimensionless {pub: in};
    // !!!!! Currently the model only has voltage dependent activation. You need to include stretch dependence
    I_piezo = g*m_V*m_r*(Vm-E_Na);
    ode(m_V, t) = (m_V_inf-m_V)/tau_V;
    m_V_inf = 1{dimensionless}/(1{dimensionless}+exp(-(Vm-V_50)/k_V));
    // !!!!! Below here include the equations for stretch sensitive gating.
    ode(m_r, t) = (m_r_inf-m_r)/tau_r;
    m_r_inf = 1{dimensionless}/(1{dimensionless}+exp(-(r_ratio-r_50)/k_r));
    // !!!!!
  enddef;

  def comp smc_hernandez_with_piezo as
    var t: ms {pub: in};
    var I_piezo: picoA {pub: in};
    var Ca_i_init: mM {pub: in};
    var V_init: mV {pub: in};
    var F: C_per_millimol {pub: in};
    var R: J_per_mol_K {pub: in};
    var T: kelvin {pub: in};
    var Ca_out: mM {pub: in};
    var Ca_jun_init: mM {pub: in};
    var Z_ca: dimensionless {pub: in};
    var Na_out: mM {pub: in};
    var Na_i_init: mM {pub: in};
    var K_out: mM {pub: in};
    var K_i_init: mM {pub: in};
    var Pk: dimensionless {pub: in};
    var I_Ca_total: picoA {pub: out};
    I_Ca_total = I_CaV+I_Ca_leak+I_PMCA-2{dimensionless}*I_NCX;
    var I_Na_total: picoA {pub: out};
    // !!!!!! Here is where to add the piezo channel current for molar conservation
    I_Na_total = 3{dimensionless}*I_NCX+3{dimensionless}*I_NaK+I_NSC_Na+I_Na_Leak+I_piezo;
    ode(Na_i, t) = -I_Na_total/(Z_Na*F*vol_cell);
    // !!!!!!
    var I_K_total: picoA {pub: out};
    var I_KvAll: picoA {pub: out};
    I_KvAll = I_Kv15+I_Kv21;
    I_K_total = I_KvAll-2{dimensionless}*I_NaK+I_K_Leak+I_BKCa+I_NSC_K;
    ode(K_i, t) = -I_K_total/(Z_K*F*vol_cell);
    var vol_cell: microm3 {pub: in};
    var vol_SRcen: microm3 {pub: in};
    var vol_jun: microm3 {pub: in};
    var BUF_1_init: mM {pub: in};
    ode(Ca_i, t) = -I_Ca_total/(2{dimensionless}*F*vol_cell)-J_SERCA-(K_BUF_on*Ca_i*(BUF_T-BUF_1)-K_BUF_off*BUF_1)+J_jun_in;
    ode(BUF_1, t) = K_BUF_on*Ca_i*(BUF_T-BUF_1)-K_BUF_off*BUF_1;
    var Z_Na: dimensionless {pub: in};
    var Z_K: dimensionless {pub: in};
    var C_m: picoFarad {pub: in};
    var BUF_T: mM {pub: in};
    var K_BUF_on: per_mMms {pub: in};
    var K_BUF_off: per_ms {pub: in};
    var BUF_jun_T: mM {pub: in};
    var CSQ_SRcen_T: mM {pub: in};
    var CSQ_SRper_T: mM {pub: in};
    var k_CSQ_on: per_mMms {pub: in};
    var k_CSQ_off: per_ms {pub: in};
    var CSQ_SRcen1_init: mM {pub: in};
    var Ca_SRcen_init: mM {pub: in};
    var I_SERC_bar: mM_per_ms {pub: in};
    var I_SERC_bar_init: dimensionless {pub: out};
    I_SERC_bar_init = 0.0000035{dimensionless}*1.5{dimensionless};
    var k_mSERCA: mM {pub: in};
    var J_SERCA: mM_per_ms {pub: out};
    J_SERCA = I_SERC_bar*sqr(Ca_i)/(sqr(Ca_i)+sqr(k_mSERCA));
    ode(CSQ_SRcen1, t) = k_CSQ_on*Ca_SRcen*(CSQ_SRcen_T-CSQ_SRcen1)-k_CSQ_off*CSQ_SRcen1;
    ode(Ca_SRcen, t) = J_SERCA*vol_cell/vol_SRcen-J_rel*vol_cell/vol_SRcen;
    var BUF_jun_1_init: mM {pub: in};
    ode(BUF_jun_1, t) = K_BUF_on*Ca_jun*(BUF_jun_T-BUF_jun_1)-K_BUF_off*BUF_jun_1;
    ode(Ca_jun, t) = J_rel*vol_cell/vol_jun-J_jun_in*vol_cell/vol_jun;
    var J_rel: mM_per_ms {pub: out};
    var J_jun_in: mM_per_ms {pub: out};
    var n_RyR_Ca_jun: dimensionless {pub: in};
    var R_10_init: dimensionless {pub: in};
    var Y_RyR_Ca_jun: dimensionless {pub: out};
    var tau_alpha: ms {pub: out};
    var alpha_inf: dimensionless {pub: out};
    Y_RyR_Ca_jun = 1{dimensionless}/(1{dimensionless}+pow(0.12{mM}/Ca_SRcen, 5{dimensionless}));
    tau_alpha = 1{mMms}/(500{dimensionless}*(pow(Ca_jun/1{mM}, n_RyR_Ca_jun)*Y_RyR_Ca_jun+pow(0.065{mM}, n_RyR_Ca_jun)));
    alpha_inf = pow(Ca_jun, n_RyR_Ca_jun)*Y_RyR_Ca_jun/(pow(Ca_jun/1{mM}, n_RyR_Ca_jun)*Y_RyR_Ca_jun+pow(0.065{dimensionless}, n_RyR_Ca_jun));
    ode(R_10, t) = (alpha_inf-R_10)/tau_alpha;
    J_rel = 0.0022{per_ms}*R_10*(Ca_SRcen-Ca_jun);
    J_jun_in = 0.0008{per_ms}*(Ca_jun-Ca_i);
    var dL_init: dimensionless {pub: in};
    var dF_init: dimensionless {pub: in};
    var alpha_act: ms {pub: out};
    var beta_act: ms {pub: out};
    var dL_bar: dimensionless {pub: out};
    var tau_dL: ms {pub: out};
    var alpha_ina: ms {pub: out};
    var beta_ina: ms {pub: out};
    var dF_bar: dimensionless {pub: out};
    var tau_dF: ms {pub: out};
    var I_CaV: picoA {pub: out};
    alpha_act = 0.3321{ms}*exp(V/12.9372{mV});
    beta_act = 0.1557{ms}*exp(V/(-10.3606{mV}));
    dL_bar = 1{dimensionless}/(1{dimensionless}+beta_act/alpha_act);
    tau_dL = 1{ms2}/(alpha_act+beta_act)+1.763{ms};
    ode(dL, t) = (dL_bar-dL)/tau_dL;
    alpha_ina = 0.0028{ms}*exp(V/(-54.1923{mV}));
    beta_ina = 0.0111{ms}*exp(V/22.3706{mV});
    dF_bar = 1{dimensionless}/(1{dimensionless}+beta_ina/alpha_ina);
    tau_dF = 1{ms2}/(alpha_ina+beta_ina)+74.28{ms};
    ode(dF, t) = (dF_bar-dF)/tau_dF;
    I_CaV = 0.22{nM3_per_ps}*dL*dF*sqr(Z_ca)*F*F/(R*T)*V*(Ca_i*exp(Z_ca*F*V/(R*T))-Ca_out)/(exp(Z_ca*F*V/(R*T))-1{dimensionless});
    var I_PMCA_bar: picoA {pub: in};
    var K_m_PMCA: mM {pub: in};
    var I_PMCA: picoA {pub: out};
    I_PMCA = I_PMCA_bar*sqr(Ca_i)/(sqr(Ca_i)+sqr(K_m_PMCA));
    var G_Ca_b: nS {pub: in};
    var E_Ca: mV {pub: out};
    var I_Ca_leak: picoA {pub: out};
    E_Ca = 0.5{dimensionless}*R*T/F*ln(Ca_out/Ca_i);
    I_Ca_leak = G_Ca_b*(V-E_Ca);
    var P_NCX: picoA {pub: in};
    var gammax: dimensionless {pub: in};
    var phi_f: dimensionless {pub: out};
    var phi_r: dimensionless {pub: out};
    var X_NCX: dimensionless {pub: out};
    var I_NCX: picoA {pub: out};
    phi_f = exp(gammax*V*F/(R*T));
    phi_r = exp((gammax-1{dimensionless})*V*F/(R*T));
    X_NCX = (pow(Na_i, 3{dimensionless})*Ca_out*phi_f-pow(Na_out, 3{dimensionless})*Ca_i*phi_r)/(1{mM4}+0.0003{dimensionless}*(pow(Na_out, 3{dimensionless})*Ca_i+pow(Na_i, 3{dimensionless})*Ca_out));
    I_NCX = P_NCX*X_NCX;
    var Q10: dimensionless {pub: in};
    var K_mNaK_k: mM {pub: in};
    var K_mNaK_na: mM {pub: in};
    var N_pow: dimensionless {pub: out};
    var N_1: dimensionless {pub: out};
    var N_2: dimensionless {pub: out};
    var N_0: dimensionless {pub: out};
    var I_NaK: picoA {pub: out};
    var I_NaK_max: picoA {pub: in};
    N_pow = pow(Q10, (T-309.2{kelvin})/10{kelvin});
    N_1 = pow(K_out, 1.1{dimensionless})/(pow(K_out, 1.1{dimensionless})+pow(K_mNaK_k, 1.1{dimensionless}));
    N_2 = pow(Na_i, 1.7{dimensionless})/(pow(Na_i, 1.7{dimensionless})+pow(K_mNaK_na, 1.7{dimensionless}));
    N_0 = 1{dimensionless}/(1{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*V*F/(R*T))+2.19e-3{dimensionless}*exp(Na_out/49.71{mM})*exp(-1.9{dimensionless}*V*F/(R*T)));
    I_NaK = I_NaK_max*N_1*N_0*N_2*N_pow;
    var G_Na_b: nS {pub: in};
    var E_Na: mV {pub: out};
    var I_Na_Leak: picoA {pub: out};
    E_Na = R*T/F*ln(Na_out/Na_i);
    I_Na_Leak = G_Na_b*(V-E_Na);
    var G_K_b: nS {pub: in};
    var E_K: mV {pub: out};
    var I_K_Leak: picoA {pub: out};
    E_K = R*T/F*ln(K_out/K_i);
    I_K_Leak = G_K_b*(V-E_K);
    var alpha_x: dimensionless {pub: out};
    var beta_x: dimensionless {pub: out};
    var Pk_bar: dimensionless {pub: out};
    var tau_Pk: ms {pub: out};
    var Pk_15_init: dimensionless {pub: in};
    var G_k15: nS {pub: in};
    var I_Kv15: picoA {pub: out};
    alpha_x = 0.0717{dimensionless}*exp(V/12.9290{mV});
    beta_x = 0.0533{dimensionless}*exp(V/191.7326{mV});
    Pk_bar = 1{dimensionless}/(1{dimensionless}+beta_x/alpha_x);
    tau_Pk = 1{ms}/(alpha_x+beta_x)+0.3489{ms};
    ode(Pk_15, t) = (Pk_bar-Pk_15)/tau_Pk;
    I_Kv15 = G_k15*Pk_15*(V-E_K);
    var PnsK: dimensionless {pub: in};
    var PnsNa: dimensionless {pub: in};
    var gns: nS {pub: in};
    var gnsNa: dimensionless {pub: in};
    var gnsK: dimensionless {pub: in};
    var E_NSC: mV {pub: out};
    var I_NSC: picoA {pub: out};
    var I_NSC_Na: picoA {pub: out};
    var I_NSC_K: picoA {pub: out};
    E_NSC = R*T/F*ln((PnsK*K_out+PnsNa*Na_out)/(PnsK*K_i+PnsNa*Na_i));
    I_NSC = gnsNa*gns*(V-E_NSC)+gnsK*gns*(V-E_NSC);
    I_NSC_Na = gnsNa*gns*(V-E_NSC);
    I_NSC_K = gnsK*gns*(V-E_NSC);
    var alpha_x21: dimensionless {pub: out};
    var beta_x21: dimensionless {pub: out};
    var Pk_bar21: dimensionless {pub: out};
    var tau_Pk21: ms {pub: out};
    var Pk_21_init: dimensionless {pub: in};
    var G_k21: nS {pub: in};
    var I_Kv21: picoA {pub: out};
    alpha_x21 = 0.0404{dimensionless}*exp(V/10.5223{mV});
    beta_x21 = 0.0355{dimensionless}*exp(V/221.4151{mV});
    Pk_bar21 = 1{dimensionless}/(1{dimensionless}+beta_x21/alpha_x21);
    tau_Pk21 = 1{ms}/(alpha_x21+beta_x21)+11.4616{ms};
    ode(Pk_21, t) = (Pk_bar21-Pk_21)/tau_Pk21;
    I_Kv21 = G_k21*Pk_21*(V-E_K);
    var BK_T: dimensionless {pub: in};
    // number of BK channels so dimensionless
    var Perm_BKCa: cm3_per_second {pub: in};
    var xabss_z: dimensionless {pub: out};
    var xabss_vh: mV {pub: out};
    var xabss: dimensionless {pub: out};
    var xabtc: ms {pub: out};
    var x_ab_init: dimensionless {pub: in};
    var I_BKCa: picoA {pub: out};
    xabss_z = -0.681249{dimensionless}/(1{dimensionless}+sqr((Ca_jun*1000.0{dimensionless}-0.218988{mM})/0.428335{mM}))+1.40001{dimensionless}/(1{dimensionless}+sqr((Ca_jun*1000.0{dimensionless}+228.71{mM})/684.946{mM}));
    xabss_vh = 8540.23{mV}/pow((Ca_jun*1000.0{dimensionless}+0.401189{mM})/0.00399115{mM}, 0.668054{dimensionless})-109.28{mV};
    xabss = 1.0{dimensionless}/(1.0{dimensionless}+exp(-xabss_z*F*(V-xabss_vh)/(R*T)));
    xabtc = 13.8049{ms}/(1.0{dimensionless}+sqr((V-153.019{mV})/66.4952{mV}));
    ode(x_ab, t) = (xabss-x_ab)/xabtc;
    I_BKCa = 1e9{nanoA_per_A}*BK_T*Perm_BKCa*x_ab*F*F*V/(R*T)*(K_i*exp(Z_K*F*V/(R*T))-K_out)/(exp(Z_K*F*V/(R*T))-1{dimensionless});
    var I_leak_all: picoA {pub: out};
    I_leak_all = I_Ca_leak+I_Na_Leak+I_K_Leak;
    var I_total: picoA {pub: out};
    // !!!!! Here is where to add the piezo current for charge conservation
    I_total = I_CaV+I_leak_all+I_PMCA+I_NCX+I_NaK+I_KvAll+I_NSC_Na+I_NSC_K+I_BKCa+I_piezo;
    ode(V, t) = -I_total/C_m;
    // !!!!! Here is where to add the piezo current for charge conservation
    var Ca_i: mM {init: Ca_i_init, pub: out};
    var V: mV {init: V_init, pub: out};
    var Ca_jun: mM {init: Ca_jun_init, pub: out};
    var Na_i: mM {init: Na_i_init, pub: out};
    var K_i: mM {init: K_i_init, pub: out};
    var BUF_1: mM {init: BUF_1_init, pub: out};
    var CSQ_SRcen1: mM {init: CSQ_SRcen1_init, pub: out};
    var Ca_SRcen: mM {init: Ca_SRcen_init, pub: out};
    var BUF_jun_1: mM {init: BUF_jun_1_init, pub: out};
    var R_10: dimensionless {init: R_10_init, pub: out};
    var dL: dimensionless {init: dL_init, pub: out};
    var dF: dimensionless {init: dF_init, pub: out};
    var Pk_15: dimensionless {init: Pk_15_init, pub: out};
    var Pk_21: dimensionless {init: Pk_21_init, pub: out};
    var x_ab: dimensionless {init: x_ab_init, pub: out};
  enddef;
enddef;
